PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = gray
  expName = sdp_ses-01_part-01_label-encoding
  exportHTML = on Save
  logging level = debug
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Routines
  Routine cue_trial
    ImageComponent cue_slide
      image [set every repeat] = $cue_file
      saveStartStop = False
      size [set every repeat] = (16*x_scale, 12*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cue_dur
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  Routine action1_trial
    ImageComponent slide_1
      image [set every repeat] = $action1
      saveStartStop = False
      size [set every repeat] = (16*x_scale, 12*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $action_dur
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  Routine action2_trial
    ImageComponent slide_2
      image [set every repeat] = $action2
      saveStartStop = False
      size [set every repeat] = (16*x_scale, 12*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $action_dur
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  Routine action3_trial
    ImageComponent slide_3
      image [set every repeat] = $action3
      saveStartStop = False
      size [set every repeat] = (16*x_scale, 12*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $action_dur
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  Routine target_trial
    ImageComponent target_slide
      image [set every repeat] = $target_file
      saveStartStop = False
      size [set every repeat] = (16*x_scale, 12*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
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  Routine response
    TextComponent prompt_target
      letterHeight = $prompt_size
      pos = $prompt_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1
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      text:
        Hat das Objekt die gewünschte Person erreicht?

        links = “ja”; rechts = “nein”
    KeyboardComponent target_resp
      allowedKeys [set every repeat] = 'left', 'right'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent response_code
      Code Type = Auto->JS
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      End Routine:
        if not target_resp.keys :
            msg="Failed to respond"
        elif target_resp.corr:#stored on last run routine
            msg="Correct!"
        else:
            msg="Oops! That was wrong."
  Routine initialize
    CodeComponent initialize_variable
      Code Type = Both
      Begin Experiment:
        obj_size = (0.4,0.3)
        scn_size = (.8,0.6)
        cue_dur = 2
        action_dur = .850
        target_dur = 2
        fix_dur = .5

        prompt_pos = (0,0)
        prompt_size = 0.025
        cond_file='condition_files/enc_1_list.csv'
        inst_file='condition_files/instructions.csv'

        trial_index = 0
      Begin JS Experiment:
        obj_size = [0.4,0.3];
        scn_size = [.8,0.6];
        cue_dur = 2.5;
        action_dur = 0.85;
        target_dur = 2.5;
        fix_dur = 0.5;

        prompt_pos = [0, 0];
        prompt_size = 0.025;
        inst_file = ("condition_files/instructions.xlsx");
        if (((Number.parseInt(expInfo["participant"]) % 12) === 1)) {
           cond_file = (("condition_files/enc_1_list.csv"));
        } else {
           if (((Number.parseInt(expInfo["participant"]) % 12) === 2)) {
              cond_file = (("condition_files/enc_2_list.csv"));
           } else {
              if (((Number.parseInt(expInfo["participant"]) % 12) === 3)) {
                 cond_file = (("condition_files/enc_3_list.csv"));
              } else {
                 if (((Number.parseInt(expInfo["participant"]) % 12) === 4)) {
                    cond_file = (("condition_files/enc_4_list.csv"));
                 } else {
                    if (((Number.parseInt(expInfo["participant"]) % 12) === 5)) {
                       cond_file = (("condition_files/enc_5_list.csv"));
                    } else {
                       if (((Number.parseInt(expInfo["participant"]) % 12) === 6)) {
                          cond_file = (("condition_files/enc_6_list.csv"));
                       } else {
                          if (((Number.parseInt(expInfo["participant"]) % 12) === 7)) {
                             cond_file = (("condition_files/enc_7_list.csv"));
                          } else {
                             if (((Number.parseInt(expInfo["participant"]) % 12) === 8)) {
                                cond_file = (("condition_files/enc_8_list.csv"));
                             } else {
                                if (((Number.parseInt(expInfo["participant"]) % 12) === 9)) {
                                   cond_file = (("condition_files/enc_9_list.csv"));
                                } else {
                                   if (((Number.parseInt(expInfo["participant"]) % 12) === 10)) {
                                      cond_file = (("condition_files/enc_10_list.csv"));
                                   } else {
                                      if (((Number.parseInt(expInfo["participant"]) % 12) === 11)) {
                                         cond_file = (("condition_files/enc_11_list.csv"));
                                      } else {
                                         if (((Number.parseInt(expInfo["participant"]) % 12) === 0)) {
                                            cond_file = (("condition_files/enc_12_list.csv"));
                                         }
                                      }
                                   }
                                }
                             }
                          }
                       }
                    }
                 }
              }
           }
        }
        trial_index = 0;
  Routine fixcross_display
    TextComponent fix
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent comic_selection
      Code Type = Auto->JS
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      Begin Experiment:
        #cue_file="stim/" + comic_name + "Slide-01.png"
        #action1="stim/" + comic_name + "Slide-02.png"
        #action2="stim/" + comic_name + "Slide-03.png"
        #action3="stim/" + comic_name + "Slide-04.png"
        #target_file="stim/" + comic_name + "Slide-06.png"
  Routine ready
    TextComponent warning
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        Sie beginnen jetzt mit den Übungsversuchen.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent ready_text
      letterHeight = 0.02
      pos = (0,-.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = <Drücken Sie die Leertaste, wenn Sie fertig sind>
      units = height
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  Routine bye
    TextComponent text_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        Gut gemacht!
        Dieser erste Teil ist abgeschlossen. Gehen Sie zurück in den Online-Raum, um die Anweisungen für die nächste Phase zu erhalten.

        Denken Sie daran, dass die Daten gespeichert werden, nachdem Sie den Vollbildschirm verlassen haben. Bitte schließen Sie das Fenster nicht manuell, bevor die Daten gespeichert sind.

        Drücken Sie eine beliebige Taste, um den Vollbildmodus zu verlassen.
    KeyboardComponent welcome_resp1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
    ImageComponent Welcome1
      disabled = True
      image [set every repeat] = $inst_text1
      saveStartStop = False
      size = $scn_size
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text_comp
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inst_text
      units = height
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    KeyboardComponent welcome_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    TextComponent feedb_text_obj
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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  Routine practice_end
    TextComponent warning_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        Sie haben alle Übungsaufgaben gelöst. Jetzt beginnt die eigentliche Aufgabe.

        Sind Sie bereit?
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent ready_text_2
      letterHeight = 0.02
      pos = (0,-.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = < Drücken Sie die Leertaste um fortzufahren >
      units = height
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  Routine screen_scale
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin Routine:
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.05
      pos = (0, .7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Skalieren Sie bitte dieses Bild so, dass es der Größe einer Kreditkarte entspricht.
        Pfeiltaste nach oben für höher
        Pfeiltaste nach unten für kürzer
        Pfeiltaste nach links für schmaler
        Pfeiltaste nach rechts für breiter
    TextComponent text_bottom
      letterHeight = 0.05
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text = Drücken Sie die Leertaste, wenn Sie fertig sind.
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine hello
    TextComponent text_hi
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Liebe/r Teilnehmer/in,

        bevor wir anfangen, werden wir die Größe Ihres Monitors bestimmen. Danach werden Sie Instruktionen für die Studie bekommen und schließlich mit der Aufgabe beginnen.

        < Drücken Sie die Leertaste um fortzufahren >
    KeyboardComponent key_resp_hi
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine initialize
  Routine hello
  Routine screen_scale
  LoopInitiator welcome_loop loopType="TrialHandler"
    conditionsFile = $inst_file
    loopType = sequential
    nReps = 1
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    Routine welcome
  LoopTerminator welcome_loop
  Routine ready
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = condition_files/practice_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('schema', 'throw'), ('relationship', 'adults'), ('object', 'ball'), ('context', 'park_17'), ('pair', 'ww_43'), ('spec_obj', 'beach_ball'), ('violation', 'other_schema'), ('comic_name', '01-02_01_02_169'), ('ecog', None), ('scn_cat', 'park'), ('scn_type', 'outdoor'), ('cong_code', 6), ('congruency', 'con'), ('corr_ans', 'left'), ('cue_file', 'stim/01-02_01_02_169/Slide-01.png'), ('action1', 'stim/01-02_01_02_169/Slide-02.png'), ('action2', 'stim/01-02_01_02_169/Slide-03.png'), ('action3', 'stim/01-02_01_02_169/Slide-04.png'), ('target_file', 'stim/01-02_01_02_169/Slide-06.png')]),
      OrderedDict([('schema', 'throw'), ('relationship', 'adults'), ('object', 'ball'), ('context', 'beach_20'), ('pair', 'wm_42'), ('spec_obj', 'american_ball'), ('violation', 'action'), ('comic_name', '01-02_01_02_164'), ('ecog', None), ('scn_cat', 'beach'), ('scn_type', 'outdoor'), ('cong_code', 5), ('congruency', 'neu'), ('corr_ans', 'right'), ('cue_file', 'stim/01-02_01_02_164/Slide-01.png'), ('action1', 'stim/01-02_01_02_164/Slide-02.png'), ('action2', 'stim/01-02_01_02_164/Slide-03.png'), ('action3', 'stim/01-02_01_02_164/Slide-04.png'), ('target_file', 'stim/01-02_01_02_164/Slide-05.png')]),
      OrderedDict([('schema', 'throw'), ('relationship', 'adults'), ('object', 'ball'), ('context', 'camping_19'), ('pair', 'wm_45'), ('spec_obj', 'volley_ball'), ('violation', 'unrelated'), ('comic_name', '01-02_01_02_179'), ('ecog', None), ('scn_cat', 'camping'), ('scn_type', 'outdoor'), ('cong_code', 8), ('congruency', 'inc'), ('corr_ans', 'right'), ('cue_file', 'stim/01-02_01_02_179/Slide-01.png'), ('action1', 'stim/01-02_01_02_179/Slide-02.png'), ('action2', 'stim/01-02_01_02_179/Slide-03.png'), ('action3', 'stim/01-02_01_02_179/Slide-04.png'), ('target_file', 'stim/01-02_01_02_179/Slide-08.png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,
      OrderedDict([('schema', 'throw'), ('relationship', 'adults'), ('object', 'ball'), ('context', 'camping_17'), ('pair', 'ww_45'), ('spec_obj', 'american_ball'), ('violation', 'other_schema'), ('comic_name', '01-02_01_02_177'), ('ecog', None), ('scn_cat', 'camping'), ('scn_type', 'outdoor'), ('cong_code', 6), ('congruency', 'con'), ('corr_ans', 'left'), ('cue_file', 'stim/01-02_01_02_177/Slide-01.png'), ('action1', 'stim/01-02_01_02_177/Slide-02.png'), ('action2', 'stim/01-02_01_02_177/Slide-03.png'), ('action3', 'stim/01-02_01_02_177/Slide-04.png'), ('target_file', 'stim/01-02_01_02_177/Slide-06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
    Routine fixcross_display
    Routine cue_trial
    Routine action1_trial
    Routine action2_trial
    Routine action3_trial
    Routine target_trial
    Routine response
    Routine feedback
  LoopTerminator practice_trials
  Routine practice_end
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $cond_file
    endPoints = [1, 2]
    loopType = random
    nReps = 1
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    Routine fixcross_display
    Routine cue_trial
    Routine action1_trial
    Routine action2_trial
    Routine action3_trial
    Routine target_trial
    Routine response
  LoopTerminator trials
  Routine bye
