PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = gray
  expName = sdp_ses-01_part-01_label-retrieval
  logging level = debug
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Routines
  Routine action1_trial
    ImageComponent slide_1
      image [set every repeat] = $action1
      saveStartStop = False
      size = $scn_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $action_dur
      units = height
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  Routine action2_trial
    ImageComponent slide_2
      image [set every repeat] = $action2
      saveStartStop = False
      size = $scn_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $action_dur
      units = height
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  Routine action3_trial
    ImageComponent slide_3
      image [set every repeat] = $action3
      saveStartStop = False
      size = $scn_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $action_dur
      units = height
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  Routine target_trial
    ImageComponent target_trial_cue
      image [set every repeat] = $cue_file
      pos = (0,0.2)
      saveStartStop = False
      size [set every repeat] = (14*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent choice_left_disp
      image [set every repeat] = $choice_left
      pos = (-0.5,-0.3)
      saveStartStop = False
      size [set every repeat] = (8*x_scale, 7*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent choice_center_disp
      image [set every repeat] = $choice_center
      pos = (0,-0.3)
      saveStartStop = False
      size [set every repeat] = (8*x_scale, 7*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent choice_right_disp
      image [set every repeat] = $choice_right
      pos = (0.5,-0.3)
      saveStartStop = False
      size [set every repeat] = (8*x_scale, 7*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent afc_prompt
      letterHeight = 0.025
      pos = (0,-0.1)
      startVal [time (s)] = 0.0
      text = Wie ist die Geschichte ausgegangen?
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    KeyboardComponent afc_resp
      allowedKeys [set every repeat] = '1', '2', '3'
      correctAns = $afc_corr
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent reminder_1
      letterHeight = 0.025
      pos = (-0.5,-0.125)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent reminder_2
      letterHeight = 0.025
      pos = (0,-0.125)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent reminder_3
      letterHeight = 0.025
      pos = (0.5,-0.125)
      startVal [time (s)] = 0.0
      text = 3
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        if (OvsN_code === 0) {
            continueRoutine = false;
        }
      Begin Routine:
        if OvsN_code == 0:
            continue
      Each JS Frame:
        if (OvsN_code === 0) {
            continueRoutine = false;
        }
  Routine initialize
    CodeComponent initialize_variable
      Code Type = Both
      Begin Experiment:
        obj_size = (0.4,0.3)
        scn_size = (0.8,0.6)
        story_rec_dur = 10
        central_recall_dur = 10
        ending_recall_dur = 10
        target_trial_dur = 10
        fix_dur = .5
        choice_size = (0.3,0.3)
        pos_left = (-0.5,-0.3)
        pos_center = (0,-0.3)
        pos_right = (0.5,-0.3)
        prompt_pos = (0,-0.4)
        prompt_size = 0.025
        afc_cue_size = (0.7,0.5)
        afc_cue_pos = (0,.2)
        inst_file='condition_files/instructions.csv'
        cond_file='condition_files/enc_1_list.csv'
      Begin JS Experiment:
        obj_size = [0.4,0.3];
        scn_size = [.8,0.6];
        story_rec_dur=10;
        central_recall_dur=10;
        ending_recall_dur=10;
        target_trial_dur=10;
        fix_dur=0.5;
        choice_size=(0.3,0.3);
        pos_left=(-0.5,-0.3);
        pos_center=(0,-0.3);
        pos_right=(0.5,-0.3);
        prompt_pos=(0,-0.4);
        prompt_size=0.025;
        afc_cue_size=(0.7,0.5);
        afc_cue_pos=(0,.2);
        inst_file='condition_files/instructions.xlsx'
        if (((Number.parseInt(expInfo["participant"]) % 12) === 1)) {
           cond_file = (("condition_files/enc_1_list.csv"));
        } else {
           if (((Number.parseInt(expInfo["participant"]) % 12) === 2)) {
              cond_file = (("condition_files/enc_2_list.csv"));
           } else {
              if (((Number.parseInt(expInfo["participant"]) % 12) === 3)) {
                 cond_file = (("condition_files/enc_3_list.csv"));
              } else {
                 if (((Number.parseInt(expInfo["participant"]) % 12) === 4)) {
                    cond_file = (("condition_files/enc_4_list.csv"));
                 } else {
                    if (((Number.parseInt(expInfo["participant"]) % 12) === 5)) {
                       cond_file = (("condition_files/enc_5_list.csv"));
                    } else {
                       if (((Number.parseInt(expInfo["participant"]) % 12) === 6)) {
                          cond_file = (("condition_files/enc_6_list.csv"));
                       } else {
                          if (((Number.parseInt(expInfo["participant"]) % 12) === 7)) {
                             cond_file = (("condition_files/enc_7_list.csv"));
                          } else {
                             if (((Number.parseInt(expInfo["participant"]) % 12) === 8)) {
                                cond_file = (("condition_files/enc_8_list.csv"));
                             } else {
                                if (((Number.parseInt(expInfo["participant"]) % 12) === 9)) {
                                   cond_file = (("condition_files/enc_9_list.csv"));
                                }
                                if (((Number.parseInt(expInfo["participant"]) % 12) === 10)) {
                                   cond_file = (("condition_files/enc_10_list.csv"));
                                }
                                if (((Number.parseInt(expInfo["participant"]) % 12) === 11)) {
                                   cond_file = (("condition_files/enc_11_list.csv"));
                                }
                                if (((Number.parseInt(expInfo["participant"]) % 12) === 0)) {
                                   cond_file = (("condition_files/enc_12_list.csv"));
                                }
                             }
                          }
                       }
                    }
                 }
              }
           }
        }
  Routine fixcross_display
    TextComponent fix
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent comic_selection
      Code Type = Auto->JS
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      Begin Experiment:
        #cue_file="stim/" + comic_name + "Slide-01.png"
        #action1="stim/" + comic_name + "Slide-02.png"
        #action2="stim/" + comic_name + "Slide-03.png"
        #action3="stim/" + comic_name + "Slide-04.png"
        #target_file="stim/" + comic_name + "Slide-06.png"
  Routine Welcome
    ImageComponent Welcome1
      disabled = True
      image [set every repeat] = $inst_text1
      saveStartStop = False
      size = $scn_size
      startVal [time (s)] = 0.0
      units = height
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    TextComponent text
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inst_text
      units = height
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    KeyboardComponent welcome_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent end_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Herzlichen Glückwunsch!

        Sie haben die Aufgabe abgeschlossen.

        Denken Sie daran, dass die Daten gespeichert werden, nachdem Sie den Vollbildschirm verlassen haben. Bitte schließen Sie das Fenster nicht manuell, bevor die Daten gespeichert sind.

        Vielen Dank für Ihre Teilnahme.

        Drücken Sie eine beliebige Taste, um den Vollbildmodus zu verlassen.
    KeyboardComponent key_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ready
    TextComponent warning
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Sind Sie bereit?
      units = height
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine story_rec
    ImageComponent cue_slide
      image [set every repeat] = $cue_file
      pos = (0, 0.2)
      saveStartStop = False
      size [set every repeat] = (14*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent story_rec_prompt
      letterHeight = 0.025
      pos = (0,-0.15)
      startVal [time (s)] = 0.0
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      text:
        Haben Sie diese Geschichte schon einmal gesehen?

        links = "ja"; rechts = "nein"
    KeyboardComponent story_rec_resp
      allowedKeys [set every repeat] = 'left', 'right'
      correctAns = $story_rec_corr
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine central_recall
    ImageComponent cue_slide_2
      image [set every repeat] = $cue_file
      pos = (0, 0.2)
      saveStartStop = False
      size [set every repeat] = (14*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent central_recall_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextboxComponent central_recall_textbox
      bold = False
      editable = True
      letterHeight = 0.025
      pos = (0,-.3)
      size = (0.5,0.2)
      startVal [time (s)] = 0.0
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    TextComponent central_recall_prompt
      letterHeight = 0.025
      pos = (0,-0.15)
      startVal [time (s)] = 0.0
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      text:
        Welcher Gegenstand wurde in diesem Comic ausgetauscht?
        Geben Sie unten ein oder zwei Wörter ein oder drücken Sie ENTER, wenn Sie sich nicht erinnern können.
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        central_recall_textbox.text = "";
        if (OvsN_code === 0) {
            continueRoutine = false;
        }
      Begin Routine:
        central_recall_textbox.text = ""
        if OvsN_code == 0:
            continue
      Each JS Frame:
        if (OvsN_code === 0) {
            continueRoutine = false;
        }
  Routine ending_recall
    ImageComponent cue_slide_3
      image [set every repeat] = $cue_file
      pos = (0, 0.2)
      saveStartStop = False
      size [set every repeat] = (14*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent ending_rec_prompt
      letterHeight = 0.025
      pos = (0,-0.15)
      startVal [time (s)] = 0.0
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      text:
        Hat das Objekt die gewünschte Person erreicht?

        links = "ja"; rechts = "nein"
    KeyboardComponent ending_rec_resp
      allowedKeys [set every repeat] = 'left', 'right'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        if (OvsN_code === 0) {
            continueRoutine = false;
        }
      Begin Routine:
        if OvsN_code == 0:
            continue
      Each JS Frame:
        if (OvsN_code === 0) {
            continueRoutine = false;
        }
  Routine hello
    TextComponent text_hi
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Liebe/r Teilnehmer/in,

        bevor wir anfangen, werden wir die Größe Ihres Monitors bestimmen. Danach werden Sie Instruktionen für die Studie bekommen und schließlich mit der Aufgabe beginnen.

        < Drücken Sie die Leertaste um fortzufahren >
    KeyboardComponent key_resp_hi
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine screen_scale
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
    CodeComponent code_scale
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin Routine:
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.05
      pos = (0, .7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Skalieren Sie bitte dieses Bild so, dass es der Größe einer Kreditkarte entspricht.
        Pfeiltaste nach oben für höher
        Pfeiltaste nach unten für kürzer
        Pfeiltaste nach links für schmaler
        Pfeiltaste nach rechts für breiter
    TextComponent text_bottom
      letterHeight = 0.05
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text = Drücken Sie die Leertaste, wenn Sie fertig sind.
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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Flow
  Routine initialize
  Routine hello
  Routine screen_scale
  LoopInitiator welcome_loop loopType="TrialHandler"
    conditionsFile = $inst_file
    loopType = sequential
    nReps = 1
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    Routine Welcome
  LoopTerminator welcome_loop
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $cond_file
    endPoints = [1, 2]
    loopType = random
    nReps = 1
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    Routine fixcross_display
    Routine story_rec
    Routine central_recall
    Routine ending_recall
    Routine target_trial
  LoopTerminator trials
  Routine end
